//This macro uses Read and Write Excel to tranpose results columns from shape data
//output by the Salts AGAR 18K macros into labelled tabs in an Excel sheet.

//Default settings: All shape results data within subfolders of selected input directory 
//are processed in sequence. Shape columns extracted are: Area, Perimeter, Solidity,
//Form factor, Roundness, Feret diameter and Orientation.
//Rearranged Excel file is saved on the desktop as 'Rename me after writing is done.xlsx".

macro "Shape results table arrangement" {
	parent=getDirectory("Choose grandparent directory");
	list=getFileList(parent);
	
	for (i = 0; i < list.length; i++) {
		dirName = list[i];
		dir=parent+File.separator+dirName;
		sr=dir+File.separator+"-results.csv";
		open(sr);
		srn=File.separator+File.getName(sr);
	
		IJ.renameResults(srn, "Results");
		//Table.deleteColumn("Area"); 
		Table.deleteColumn("Perim.");
		Table.deleteColumn("CH Area");
		Table.deleteColumn("CH Perim.");
		Table.deleteColumn("Solidity");
		Table.deleteColumn("Convexity"); 
		Table.deleteColumn("FormFactor");
		Table.deleteColumn("Circularity");
		Table.deleteColumn("Roundness");
		Table.deleteColumn("AR feret"); 
		Table.deleteColumn("Feret d");
		Table.deleteColumn("MinFeret d");
		Table.deleteColumn("Orientation");
	
		run("Read and Write Excel", "no_count_column sheet=Area dataset_label=" +dirName);
		close("Results");
		
		open(sr);
		srn=File.separator+File.getName(sr);	
		IJ.renameResults(srn, "Results");
		Table.deleteColumn("Area"); 
		Table.deleteColumn("Perim.");
		Table.deleteColumn("CH Area");
		Table.deleteColumn("CH Perim.");
		//Table.deleteColumn("Solidity");
		Table.deleteColumn("Convexity"); 
		Table.deleteColumn("FormFactor");
		Table.deleteColumn("Circularity");
		Table.deleteColumn("Roundness");
		Table.deleteColumn("AR feret"); 
		Table.deleteColumn("Feret d");
		Table.deleteColumn("MinFeret d");
		Table.deleteColumn("Orientation");	
	
		run("Read and Write Excel", "no_count_column sheet=Solidity dataset_label=" +dirName);
		close("Results");
		
		open(sr);
		srn=File.separator+File.getName(sr);	
		IJ.renameResults(srn, "Results");
		Table.deleteColumn("Area"); 
		//Table.deleteColumn("Perim.");
		Table.deleteColumn("CH Area");
		Table.deleteColumn("CH Perim.");
		Table.deleteColumn("Solidity");
		Table.deleteColumn("Convexity"); 
		Table.deleteColumn("FormFactor");
		Table.deleteColumn("Circularity");
		Table.deleteColumn("Roundness");
		Table.deleteColumn("AR feret"); 
		Table.deleteColumn("Feret d");
		Table.deleteColumn("MinFeret d");
		Table.deleteColumn("Orientation");
		
		run("Read and Write Excel", "no_count_column sheet=Perimeter dataset_label=" +dirName);
		close("Results");
			
		open(sr);
		srn=File.separator+File.getName(sr);
		IJ.renameResults(srn, "Results");
		Table.deleteColumn("Area"); 
		Table.deleteColumn("Perim.");
		Table.deleteColumn("CH Area");
		Table.deleteColumn("CH Perim.");
		Table.deleteColumn("Solidity");
		Table.deleteColumn("Convexity"); 
		//Table.deleteColumn("FormFactor");
		Table.deleteColumn("Circularity");		
		Table.deleteColumn("Roundness");
		Table.deleteColumn("AR feret");  
		Table.deleteColumn("Feret d");
		Table.deleteColumn("MinFeret d");
		Table.deleteColumn("Orientation");
		
		run("Read and Write Excel", "no_count_column sheet=Form factor dataset_label=" +dirName);
		close("Results");
		
		open(sr);
		srn=File.separator+File.getName(sr);
		IJ.renameResults(srn, "Results");
		Table.deleteColumn("Area"); 
		Table.deleteColumn("Perim.");
		Table.deleteColumn("CH Area");
		Table.deleteColumn("CH Perim.");
		Table.deleteColumn("Solidity");
		Table.deleteColumn("Convexity"); 
		Table.deleteColumn("FormFactor");
		Table.deleteColumn("Circularity");
		//Table.deleteColumn("Roundness");
		Table.deleteColumn("AR feret"); 
		Table.deleteColumn("Feret d");
		Table.deleteColumn("MinFeret d");
		Table.deleteColumn("Orientation");	
	
		run("Read and Write Excel", "no_count_column sheet=Roundness dataset_label=" +dirName);
		close("Results");
		
		open(sr);
		srn=File.separator+File.getName(sr);
		IJ.renameResults(srn, "Results");
		Table.deleteColumn("Area"); 
		Table.deleteColumn("Perim.");
		Table.deleteColumn("CH Area");
		Table.deleteColumn("CH Perim.");
		Table.deleteColumn("Solidity");
		Table.deleteColumn("Convexity"); 
		Table.deleteColumn("FormFactor");
		Table.deleteColumn("Circularity");
		Table.deleteColumn("Roundness");
		//Table.deleteColumn("AR feret"); 
		Table.deleteColumn("Feret d");
		Table.deleteColumn("MinFeret d");
		Table.deleteColumn("Orientation");	
	
		run("Read and Write Excel", "no_count_column sheet=AxR dataset_label=" +dirName);
		close("Results");

		open(sr);
		srn=File.separator+File.getName(sr);
		IJ.renameResults(srn, "Results");
		Table.deleteColumn("Area"); 
		Table.deleteColumn("Perim.");
		Table.deleteColumn("CH Area");
		Table.deleteColumn("CH Perim.");
		Table.deleteColumn("Solidity");
		Table.deleteColumn("Convexity"); 
		Table.deleteColumn("FormFactor");
		Table.deleteColumn("Circularity");
		Table.deleteColumn("Roundness");
		Table.deleteColumn("AR feret"); 
		Table.deleteColumn("Feret d");
		Table.deleteColumn("MinFeret d");
		//Table.deleteColumn("Orientation");
		
		run("Read and Write Excel", "no_count_column sheet=Orientation dataset_label=" +dirName);
		close("Results");	
		run("Close All");
	}
}